---
API: 2.1
OpenSesame: 3.2.6
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "mobile UFOV"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\nar09\\Documents\\GitHub\\paradigms\\mobile_ufov_demo"
set disable_garbage_collection yes
set description "Created by Nelson Roque, PhD. nelsonroque.com"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background grey

define sketchpad divided_attention
	set duration "[stim_presentation_time]"
	set description "Displays stimuli"
	draw image center=1 file="ufov.png" rotation="[target_starting_rotation]" scale="[UFOV_img_scale]" show_if=always x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_script always
	run mUFOVIntro always
	run trial_table always

define sketchpad fixation
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad mUFOVIntro
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=36 html=yes show_if=always text=mUFOV x=0 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="Press any key to continue." x=0 y=256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="Instructions here." x=0 y=-128 z_index=0

define sketchpad mask
	set duration "[mask_presentation_time_ms]"
	set description "Displays stimuli"
	draw image center=1 file="mask.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define inline_script new_inline_script
	set description "Executes Python code"
	set _run ""
	___prepare__
	var.response_central_timeout_ms = 5000
	var.mask_presentation_time_ms = 500
	
	var.UFOV_img_path = exp.pool[u'ufov.png']
	var.UFOV_img_scale = 0.6
	var.UFOV_starting_positions = [0,30,60,90,120,150,180,210,240,270,300,330]
	
	var.central_stim_spacing_px = 300
	__end__

define inline_script randomize_starting_rotation
	set description "Executes Python code"
	set _run ""
	___prepare__
	# randomize start rotation
	# ////////////////////////////////////////
	import random
	var.target_starting_rotation = random.choice(var.UFOV_starting_positions)
	__end__

define inline_script response_central
	set description "Executes Python code"
	___run__
	# listen for response
	# ////////////////////////////////////////
	while True:
		button, position, timestamp = my_mouse.get_click(timeout=20)
		if button is not None:
			break
		(x,y), time = my_mouse.get_pos()
	
		# draw stimuli	
		# ////////////////////////////////////////
		#my_canvas.clear()
		my_canvas.show()
	
	# save variables
	# ////////////////////////////////////////
	var.central_x = x
	var.central_y = y
	var.central_RT = time
	__end__
	___prepare__
	# initialize mouse
	# ////////////////////////////////////////
	my_mouse = Mouse(buttonlist=[1,3], timeout=5000, visible=True)
	my_canvas = Canvas()
	
	# create response prompt
	# ////////////////////////////////////////
	my_canvas.text("Which item did you see?", x=0, y=0)
	
	# draw stim items based on trial table side
	# ////////////////////////////////////////
	if(var.stim_response_side == "left"):
		my_canvas.image(var.UFOV_img_path, rotation=var.target_starting_rotation, x=-var.central_stim_spacing_px, y=0, scale=var.UFOV_img_scale) # left
		my_canvas.image(var.UFOV_img_path, rotation=(var.target_starting_rotation+var.lure_rotation), x=var.central_stim_spacing_px, y=0, scale=var.UFOV_img_scale) # right
	elif(var.stim_response_side == "right"):
		my_canvas.image(var.UFOV_img_path, rotation=(var.target_starting_rotation+var.lure_rotation), x=-var.central_stim_spacing_px, y=0, scale=var.UFOV_img_scale) # left
		my_canvas.image(var.UFOV_img_path, rotation=var.target_starting_rotation, x=var.central_stim_spacing_px, y=0, scale=var.UFOV_img_scale) # right
	__end__

define logger save_data
	set description "Logs experimental data"
	set auto_log yes

define sequence trial_flow
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run randomize_starting_rotation always
	run fixation always
	run divided_attention always
	run mask always
	run response_central always
	run save_data always

define loop trial_table
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 stim_presentation_time 500
	setcycle 0 stim_response_side left
	setcycle 0 lure_rotation -10
	setcycle 1 stim_presentation_time 500
	setcycle 1 stim_response_side left
	setcycle 1 lure_rotation -5
	setcycle 2 stim_presentation_time 500
	setcycle 2 stim_response_side left
	setcycle 2 lure_rotation 5
	setcycle 3 stim_presentation_time 500
	setcycle 3 stim_response_side left
	setcycle 3 lure_rotation 10
	setcycle 4 stim_presentation_time 500
	setcycle 4 stim_response_side right
	setcycle 4 lure_rotation -10
	setcycle 5 stim_presentation_time 500
	setcycle 5 stim_response_side right
	setcycle 5 lure_rotation -5
	setcycle 6 stim_presentation_time 500
	setcycle 6 stim_response_side right
	setcycle 6 lure_rotation 5
	setcycle 7 stim_presentation_time 500
	setcycle 7 stim_response_side right
	setcycle 7 lure_rotation 10
	setcycle 8 stim_presentation_time 500
	setcycle 8 stim_response_side left
	setcycle 8 lure_rotation -10
	setcycle 9 stim_presentation_time 500
	setcycle 9 stim_response_side left
	setcycle 9 lure_rotation -5
	setcycle 10 stim_presentation_time 500
	setcycle 10 stim_response_side left
	setcycle 10 lure_rotation 5
	setcycle 11 stim_presentation_time 500
	setcycle 11 stim_response_side left
	setcycle 11 lure_rotation 10
	setcycle 12 stim_presentation_time 500
	setcycle 12 stim_response_side right
	setcycle 12 lure_rotation -10
	setcycle 13 stim_presentation_time 500
	setcycle 13 stim_response_side right
	setcycle 13 lure_rotation -5
	setcycle 14 stim_presentation_time 500
	setcycle 14 stim_response_side right
	setcycle 14 lure_rotation 5
	setcycle 15 stim_presentation_time 500
	setcycle 15 stim_response_side right
	setcycle 15 lure_rotation 10
	run trial_flow

